PsychoPy2experiment version="2021.2.3"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=88B2C83A
  Data filename = u'data/%s_%s_%s' % (expInfo['MacID'], expName, expInfo['date'])
  Experiment info = {'MacID': '', 'Gender': '', 'Age': '', 'Ethnicity (e.g., African, Asian, & Caucasian)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = white
  expName = FatFaceOnline
  logging level = debug
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Routines
  Routine fixationClickable
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent Pracinstr
      color = black
      letterHeight = 0.02
      pos = (0, 0.16)
      startVal [time (s)] = 0.0
      text = Click “+”
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    MouseComponent mouse_2
      clickable = polygon,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ITI
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        jitter = Math.random() * (1.5-0.5) + 0.5;
        ﻿psychoJS.experiment.addData('ITI',jitter)
      Begin Routine:
        import random
        jitter = random.uniform(0.5, 1.5)
        thisExp.addData('ITI', jitter) # record it in the data file
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text [set every repeat] = $jitter
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  Routine fixation
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = polygon_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent EndText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        The experiment is over!

        Thank you for your participation!
  Routine RatingInstr
    TextComponent RInstr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this study, we need you to rate the “Attractiveness” of the faces that you just saw.

        Please press the “Spacebar” to start.
    KeyboardComponent RKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RatingTrial
    CodeComponent code_10
      Code Type = Both
      Each Frame:
        if (slider.getRating()):
            #ratingResult = PracSlider.getRating()
            positionNext = (0, -0.4)
            #startNext = True
        else:
            #ratingResult = "no rating"
            positionNext = (0, -0.9)
            #startNext = False
      Each JS Frame:
        if (slider.getRating()) {
            positionNext = [0, (- 0.4)];
        } else {
            positionNext = [0, (- 0.9)];
        }
    ImageComponent image_5
      image [set every repeat] = $Image
      interpolate = nearest
      size = (0.4, 0.4)
      texture resolution = 512
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    SliderComponent slider
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.28)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.3
      styleTweaks = ('triangleMarker',)
      styles = ['rating']
      ticks = (0,10,20,30,40,50,60,70,80,90,100)
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    ImageComponent NextBu
      image = Picture1.png
      interpolate = nearest
      pos [set every frame] = $positionNext
      size = (0.2, 0.1)
      startVal [time (s)] = 0.3
      texture resolution = 512
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    MouseComponent mouse_5
      clickable = NextBu,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.3
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (-0.5, -0.32)
      startVal [time (s)] = 0.3
      text = Not Attractive at all
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.32)
      startVal [time (s)] = 0.3
      text = Very Attractive
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Flow
  Routine RatingInstr
  LoopInitiator RatingBlockOrder loopType="TrialHandler"
    conditionsFile = Rating_BlockOrder.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'RatingBlock': 'TrialCondition_A.xslx'},
      {'RatingBlock': 'TrialCondition_B.xslx'}]
    LoopInitiator Ratingtrials loopType="TrialHandler"
      conditionsFile = TrialCondition_A.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'Image': 'images/chld-M-ver2.jpg', 'Gender': 'M', 'AgeGroup': 'child'},
        {'Image': 'images/chld-M-ver3.jpg', 'Gender': 'M', 'AgeGroup': 'child'},
        {'Image': 'images/chld-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'child'},
        {'Image': 'images/chld-F-ver3.jpg', 'Gender': 'F', 'AgeGroup': 'child'},
        {'Image': 'images/adl-M-ver2.jpg', 'Gender': 'M', 'AgeGroup': 'adolescent'},
        {'Image': 'images/adl-M-ver3.jpg', 'Gender': 'M', 'AgeGroup': 'adolescent'},
        {'Image': 'images/adl-F-ver5.jpg', 'Gender': 'F', 'AgeGroup': 'adolescent'},
        {'Image': 'images/adl-F-ver8.jpg', 'Gender': 'F', 'AgeGroup': 'adolescent'},
        {'Image': 'images/yA-M-ver5.jpg', 'Gender': 'M', 'AgeGroup': 'youngadult'},
        {'Image': 'images/yA-M-ver7.jpg', 'Gender': 'M', 'AgeGroup': 'youngadult'},
        {'Image': 'images/yA-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'youngadult'},
        {'Image': 'images/yA-F-ver5.jpg', 'Gender': 'F', 'AgeGroup': 'youngadult'},
        {'Image': 'images/midA-M-ver5.jpg', 'Gender': 'M', 'AgeGroup': 'midadult'},
        {'Image': 'images/midA-M-ver6.jpg', 'Gender': 'M', 'AgeGroup': 'midadult'},
        {'Image': 'images/midA-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'midadult'},
        {'Image': 'images/midA-F-ver3.jpg', 'Gender': 'F', 'AgeGroup': 'midadult'},
        {'Image': 'images/sA-M-ver4.jpg', 'Gender': 'M', 'AgeGroup': 'senioradult'},
        {'Image': 'images/sA-M-ver7.jpg', 'Gender': 'M', 'AgeGroup': 'senioradult'},
        {'Image': 'images/sA-F-ver1.jpg', 'Gender': 'F', 'AgeGroup': 'senioradult'},
        {'Image': 'images/sA-F-ver7.jpg', 'Gender': 'F', 'AgeGroup': 'senioradult'}]
      Routine RatingTrial
      Routine ITI
    LoopTerminator Ratingtrials
  LoopTerminator RatingBlockOrder
  Routine End
