PsychoPy2experiment version="2022.1.2"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Name'], expName, expInfo['date'])
  Experiment info = {'Name': '', 'Gender': '', 'Age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['Images/yA-M-ver7.jpg', 'Images/yA-M-ver5.jpg', 'Images/yA-F-ver5.jpg', 'Images/yA-F-ver2.jpg', 'Images/sA-M-ver7.jpg', 'Images/sA-M-ver4.jpg', 'Images/sA-F-ver7.jpg', 'Images/sA-F-ver1.jpg', 'Images/midA-M-ver6.jpg', 'Images/midA-M-ver5.jpg', 'Images/midA-F-ver3.jpg', 'Images/midA-F-ver2.jpg', 'Images/chld-M-ver3.jpg', 'Images/chld-M-ver2.jpg', 'Images/chld-F-ver3.jpg', 'Images/chld-F-ver2.jpg', 'Images/adl-M-ver3.jpg', 'Images/adl-M-ver2.jpg', 'Images/adl-F-ver8.jpg', 'Images/adl-F-ver5.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = #8c8c8c
  expName = 面孔评价测试
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine fixationClickable
    PolygonComponent polygon
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    TextComponent Pracinstr
      color = black
      letterHeight = 0.02
      pos = (0, 0.16)
      startVal [time (s)] = 0.0
      text = Click “+”
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    MouseComponent mouse_2
      clickable = polygon,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ITI
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        jitter = Math.random() * (1.5-0.5) + 0.5;
        ﻿psychoJS.experiment.addData('ITI',jitter)
      Begin Routine:
        import random
        jitter = random.uniform(0.5, 1.5)
        thisExp.addData('ITI', jitter) # record it in the data file
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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  Routine fixation
    PolygonComponent polygon_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_3
      clickable = polygon_2,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent EndText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        实验结束！

        谢谢你的参与！
  Routine RatingInstr
    TextComponent RInstr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In this study, we need you to rate the “Attractiveness” of the faces that you just saw.

        Please press the “Spacebar” to start.
    KeyboardComponent RKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RatingTrial
    CodeComponent code_10
      Code Type = Both
      Begin JS Experiment:
        var positionNext = [0, (- 0.9)];
        var onsetTime = 0
      Begin JS Routine:
        positionNext = [0, (- 0.9)];

        onsetTime = globalClock.getTime()

        psychoJS.experiment.addData('onsetTime', onsetTime);

        psychoJS.experiment.addData('leftText', leftText);
        psychoJS.experiment.addData('rightText', rightText);

        psychoJS.experiment.addData('sliderDirection', sliderDirection);
      Begin Routine:
        positionNext = (0, -0.9)

        thisExp.addData('leftText', leftText)
        thisExp.addData('rightText', rightText)
        thisExp.addData('sliderDirection', sliderDirection)
      Each Frame:
        if (slider.getRating()):
            #ratingResult = PracSlider.getRating()
            positionNext = (0, -0.4)
            #startNext = True
        else:
            #ratingResult = "no rating"
            positionNext = (0, -0.9)
            #startNext = False
      Each JS Frame:
        if (slider.getRating()) {
            positionNext = [0, (- 0.4)];
        } else {
            positionNext = [0, (- 0.9)];
        }
    ImageComponent face_image
      image [set every repeat] = $Image
      interpolate = nearest
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      texture resolution = 512
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    SliderComponent slider
      borderColor = Black
      color = Black
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.28)
      size = (1.0, 0.025)
      startVal [time (s)] = 0.3
      styleTweaks = ('triangleMarker',)
      styles = ['rating']
      ticks = (0,25,50,75,100)
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    ImageComponent NextBu
      image = Picture1.png
      interpolate = nearest
      pos [set every frame] = $positionNext
      size = (0.2, 0.1)
      startVal [time (s)] = 0.3
      texture resolution = 512
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (-0.5, -0.32)
      startVal [time (s)] = 0.3
      text [set every repeat] = $leftText
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.32)
      startVal [time (s)] = 0.3
      text [set every repeat] = $rightText
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    MouseComponent mouse_5
      clickable = NextBu,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.3
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  Routine instruction
    CodeComponent randomLabels
      Code Type = Both
      Begin Experiment:
        leftText = ''
        rightText = ''
        sliderDirection = ''
      Begin JS Experiment:
        var leftText = ''
        var rightText = ''
        var sliderDirection = ''
      Begin JS Routine:
        if (Math.random() < 0.5) {
            leftText = LeftLabel;
            rightText = RightLabel;
            sliderDirection = "normal";
        } else {
            leftText = RightLabel;
            rightText = LeftLabel;
            sliderDirection = "mirrored";
        }

        var blockInstruction = (("欢迎参加实验！\n\n你会看到一些面孔图片。你需要对面孔的" + Task) + "进行评价。\n\n");
        blockInstruction = (blockInstruction + "你需要在标尺上点击相应的位置进行评价。\n\n");
        blockInstruction = (blockInstruction + "点击鼠标开始。");
      Begin Routine:
        if (random() < 0.5):
            leftText = LeftLabel;
            rightText = RightLabel;
            sliderDirection = 'normal';

        else:
            leftText = RightLabel;
            rightText = LeftLabel;
            sliderDirection = 'mirrored';


        blockInstruction = "欢迎参加实验！\n\n你会看到一些面孔图片。你需要对面孔的" + Task + "进行评价。\n\n";
        blockInstruction = blockInstruction + "你需要在标尺上点击相应的位置进行评价。\n\n";
        blockInstruction =  blockInstruction + "点击鼠标开始。";
    TextComponent instrBlock
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockInstruction
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator RatingBlockOrder loopType="TrialHandler"
    conditionsFile = Rating_BlockOrder.xlsx
    loopType = fullRandom
    nReps = 1
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    conditions:
      [{'Task': 'Gender', 'LeftLabel': 'Male', 'RightLabel': 'Female'},
      {'Task': 'Expression', 'LeftLabel': 'Happy', 'RightLabel': 'Sad'},
      {'Task': 'Attractiveness', 'LeftLabel': 'Attractive', 'RightLabel': 'Unattractive'}]
    Routine instruction
    LoopInitiator Ratingtrials loopType="TrialHandler"
      conditionsFile = TrialCondition.xlsx
      loopType = fullRandom
      nReps = 1
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      conditions:
        [{'Image': 'Images/adl-M-ver2.jpg', 'Gender': 'M', 'AgeGroup': 'adolescent'},
        {'Image': 'Images/adl-M-ver3.jpg', 'Gender': 'M', 'AgeGroup': 'adolescent'},
        {'Image': 'Images/adl-F-ver5.jpg', 'Gender': 'F', 'AgeGroup': 'adolescent'},
        {'Image': 'Images/adl-F-ver8.jpg', 'Gender': 'F', 'AgeGroup': 'adolescent'},
        {'Image': 'Images/yA-M-ver5.jpg', 'Gender': 'M', 'AgeGroup': 'youngadult'},
        {'Image': 'Images/yA-M-ver7.jpg', 'Gender': 'M', 'AgeGroup': 'youngadult'},
        {'Image': 'Images/yA-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'youngadult'},
        {'Image': 'Images/yA-F-ver5.jpg', 'Gender': 'F', 'AgeGroup': 'youngadult'},
        {'Image': 'Images/chld-M-ver2.jpg', 'Gender': 'M', 'AgeGroup': 'child'},
        {'Image': 'Images/chld-M-ver3.jpg', 'Gender': 'M', 'AgeGroup': 'child'},
        {'Image': 'Images/chld-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'child'},
        {'Image': 'Images/chld-F-ver3.jpg', 'Gender': 'F', 'AgeGroup': 'child'},
        {'Image': 'Images/midA-M-ver5.jpg', 'Gender': 'M', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-M-ver6.jpg', 'Gender': 'M', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-F-ver3.jpg', 'Gender': 'F', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-M-ver5.jpg', 'Gender': 'M', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-M-ver6.jpg', 'Gender': 'M', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-F-ver2.jpg', 'Gender': 'F', 'AgeGroup': 'midadult'},
        {'Image': 'Images/midA-F-ver3.jpg', 'Gender': 'F', 'AgeGroup': 'midadult'}]
      Routine RatingTrial
      Routine ITI
    LoopTerminator Ratingtrials
  LoopTerminator RatingBlockOrder
  Routine End
